CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_(?P<gene>.*)_(?P<tile>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch03")
    Name to assign these images:rna
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:gene
    Metadata category:tile

GaussianFilter:[module_num:5|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
    Select the input image:dapi
    Name the output image:dapi_gf
    Sigma:3

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:dapi_gf
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
GaussianFilter:[module_num:7|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
    Select the input image:rna
    Name the output image:rna_gf
    Sigma:1

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:nucleus
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:rna_gf
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:9|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enabled:False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
    Select the input objects:nucleus
    Name the output image:nucleus_seg
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:cell
    Name the output image:cell_seg
    Select the color format:uint16
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
SaveImages:[module_num:11|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:nucleus_seg
    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nucleus_seg
    Saved file format:tiff
    Output file location:Elsewhere...|Z:\Connie\02.TEMPOmap\05.revisionQuantification\20221102 ER gene in FUCCI cell HCR test 2\nucleus_seg
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:cell_seg
    Select method for constructing file names:From image filename
    Select image name for file prefix:rna
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_seg
    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/stanley_WangLab/Connie/02.TEMPOmap/05.revisionQuantification/20221102 ER gene in FUCCI cell HCR test 2/cell_seg
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
