CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:dapi
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:dapi
    Name the output image:dapiGF
    Sigma:5

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:dapiGF
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:nuclei
    Name the output image:nuclei
    Select the color format:uint16
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/stanley_WangLab/Data/Processed/2022-10-15-Rena-SkinCulture254-gene/output/2022-12-08-2D-segmentation-unstitched-tiles/2022-12-08-2D-segmentation/nuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

GaussianFilter:[module_num:9|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enabled:False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
    Select the input image:flamingo
    Name the output image:flamingoGF
    Sigma:5

IdentifySecondaryObjects:[module_num:10|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enabled:False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
    Select the input objects:nuclei
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:flamingoGF
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:200
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    Thresholding method:Otsu

FillObjects:[module_num:11|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enabled:False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
    Select the input object:cell
    Name the output object:cell_filled
    Minimum hole size:0
    Planewise fill:No
    Filling method:Holes

ConvertObjectsToImage:[module_num:12|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enabled:False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
    Select the input objects:cell_filled
    Name the output image:cell
    Select the color format:uint16
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
Opening:[module_num:13|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enabled:False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
    Select the input image:cell
    Name the output image:cell_open
    Structuring element:disk,3

Closing:[module_num:14|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enabled:False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
    Select the input image:cell
    Name the output image:cell_close
    Structuring element:disk,15

SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:cell_close
    Select method for constructing file names:From image filename
    Select image name for file prefix:flamingo
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/stanley_WangLab/Data/Processed/2022-09-30-Rena-Cardiomyocyte64Gene/output/2022-12-05-2D-segmentation-unstitched-tiles/2022-12-06-2D-segmentation/cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
