CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<ID>([A-Z][A-Z])_[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00.tif")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02.tif")
    Name to assign these images:flamingo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DAPI
    Name the output image:Filtered_DAPI
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Filtered_DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Smooth:[module_num:7|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
    Select the input image:flamingo
    Name the output image:flamingo_smoothed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:flamingo_smoothed
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.08,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:9|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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ResizeObjects:[module_num:10|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enabled:False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
    Select the input object:Cells
    Name the output object:ResizeObjects
    Method:Factor
    X Factor:0.9
    Y Factor:0.9
    Z Factor:1.0
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
Threshold:[module_num:11|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enabled:False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
    Select the input image:RNA
    Name the output image:RNA_thresholded
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:12|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enabled:False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
    Select images to measure:RNA
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:13|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enabled:False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
    Select images to measure:RNA
    Hidden:1
    Hidden:1
    Hidden:2
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:6
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    Image:signal
    Objects to display:Do not use
    Number of bins:4
    Measurement:Mean Fraction
    Color map:Reds
    Save display as image?:No
    Output image name:Heatmap
    Image:None
    Objects to display:Do not use
    Number of bins:8
    Measurement:Fraction at Distance
    Color map:PuBuGn
    Save display as image?:Yes
    Output image name:Heatmap

MeasureObjectSizeShape:[module_num:14|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enabled:False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
    Select object sets to measure:Nuclei, Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageIntensity:[module_num:15|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enabled:False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
    Select images to measure:RNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cells
    Calculate custom percentiles:No
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:flamingo_smoothed
    Name the output image:Cell_segmented
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0010
    Select objects to display:Cells
    Select outline color:#18C0FC
    Select objects to display:Nuclei

SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Heatmap
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CytosolBins
    Number of digits:2
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop/2022-11-11 Streptavidin-647-biotin-azide on EU-RNA 2D
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:Cell_segmented
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cell_Segmented
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/drive-download-20221209T005517Z-001
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop/2022-11-11 Streptavidin-647-biotin-azide on EU-RNA 2D
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|RadialDistribution_FracAtD_RNA_3of6,Cells|RadialDistribution_FracAtD_RNA_6of6,Cells|RadialDistribution_FracAtD_RNA_5of6,Cells|RadialDistribution_FracAtD_RNA_1of6,Cells|RadialDistribution_FracAtD_RNA_4of6,Cells|RadialDistribution_FracAtD_RNA_2of6,Cells|RadialDistribution_RadialCV_RNA_4of6,Cells|RadialDistribution_RadialCV_RNA_2of6,Cells|RadialDistribution_RadialCV_RNA_6of6,Cells|RadialDistribution_RadialCV_RNA_5of6,Cells|RadialDistribution_RadialCV_RNA_3of6,Cells|RadialDistribution_RadialCV_RNA_1of6,Cells|RadialDistribution_MeanFrac_RNA_1of6,Cells|RadialDistribution_MeanFrac_RNA_6of6,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
