CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "overlay")
    Name to assign these images:overlay
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:dapi
    Name the output image:dapi_gf
    Sigma:2

MedianFilter:[module_num:6|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
    Select the input image:dapi_gf
    Name the output image:dapi_mf
    Window:3

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:dapi_mf
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

GaussianFilter:[module_num:8|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
    Select the input image:overlay
    Name the output image:overlay_gf
    Sigma:3

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:nuclei
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:overlay_gf
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:FilteredNuclei
    Name the output image:nuclei
    Select the color format:uint16
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:nuclei
    Select method for constructing file names:Single name
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    Enter single file name:Area4_nuclei_2D
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    Saved file format:tiff
    Output file location:Elsewhere...|Z:\\Data\\Processed\\2022-10-15-Rena-SkinCulture254-gene\\output\\2022-11-07-2D-segmentation\\dapi
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:cell
    Name the output image:cell
    Select the color format:uint16
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:cell
    Select method for constructing file names:Single name
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    Enter single file name:Area4_cell_2D
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    Saved file format:tiff
    Output file location:Elsewhere...|Z:\\Data\\Processed\\2022-10-15-Rena-SkinCulture254-gene\\output\\2022-11-07-2D-segmentation\\flamingo
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
